PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Solo_Exp
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
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      text:
        Welcome to the experiment!

        Thank you for participating in this task. You will be presented with a series of 20 math problems, which will include addition, subtraction, multiplication, and division. For each problem, you will have 7 seconds to solve it.

        Please focus and do your best! The task will begin shortly.

        Good luck!
  Routine test
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text [set every repeat] = $stimulus
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
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 7.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 7.0
      text = Click to submit
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 0,1,2,3,4,5,6,7,8,9
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      storeCorrect = True
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    MouseComponent mouse
      correctAns = corrAns
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 7.0
      storeCorrect = True
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  Routine thank
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you!
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/priyalsharma/Downloads/condition_file_new.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stimulus': '2+5', 'corrAns': 7},
      {'stimulus': '8+7', 'corrAns': 15},
      {'stimulus': '30-20', 'corrAns': 10},
      {'stimulus': '6+4', 'corrAns': 10},
      {'stimulus': '40-15', 'corrAns': 25},
      {'stimulus': '35-20', 'corrAns': 15},
      {'stimulus': '19+7', 'corrAns': 26},
      {'stimulus': '20-13', 'corrAns': 7},
      {'stimulus': '50-33', 'corrAns': 17},
      {'stimulus': '20*5', 'corrAns': 100},
      {'stimulus': '13*2', 'corrAns': 26},
      {'stimulus': '45/9', 'corrAns': 5},
      {'stimulus': '81/9', 'corrAns': 9},
      {'stimulus': '18*7', 'corrAns': 126},
      {'stimulus': '14*4', 'corrAns': 56},
      {'stimulus': '63/7', 'corrAns': 9},
      {'stimulus': '128/16', 'corrAns': 8},
      {'stimulus': '19*9', 'corrAns': 171},
      {'stimulus': '17*7', 'corrAns': 119},
      {'stimulus': '120/15', 'corrAns': 8}]
    Routine test
  LoopTerminator trials
  Routine thank
